PsychoPy2experiment version="2023.1.3"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = flanker_effect
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        left_flankers = []
        right_flankers = []
        number_of_flankers = 6;

        target_string = ""
        correct_response = ""

        # variables to control the spacing
        left_position_variable =  - 0.03
        right_position_variable = 0.03
        position_manipulation = 0.03

        # setting all the six random conditions
        random_value = random()
        if random_value < 1/6:
            # whole set and congruent
            left_position_variable =  - 0.06
            right_position_variable = 0.06
            position_manipulation = 0.06
            thisExp.addData("whole_set", True)
            target_string = "I"
            correct_response = "left"
            thisExp.addData("is_congruent", True)
        elif 1/6 < random_value < 2/6:
            # whole set and incongruent
            left_position_variable =  - 0.06
            right_position_variable = 0.06
            position_manipulation = 0.06
            thisExp.addData("whole_set", True)
            target_string = "L"
            correct_response = "right"
            thisExp.addData("is_congruent", False)
        elif 2/6 < random_value < 3/6:
            # not whole set and congruent
            left_position_variable =  - 0.06
            right_position_variable = 0.06
            thisExp.addData("whole_set", False)
            target_string = "I"
            correct_response = "left"
            thisExp.addData("is_congruent", True)
        elif 3/6 < random_value < 4/6:
            # whole set and incongruent
            left_position_variable =  - 0.06
            right_position_variable = 0.06
            position_manipulation = 0.06
            thisExp.addData("whole_set", True)
            target_string = "L"
            correct_response = "right"
            thisExp.addData("is_congruent", False)
        elif 4/6 < random_value < 5/6:
            # control incongruent
            left_position_variable =  - 0.03
            right_position_variable = 0.03
            position_manipulation = 0.03
            thisExp.addData("is_control", True)
            target_string = "L"
            correct_response = "right"
            thisExp.addData("is_congruent", False)
        elif 5/6 < random_value < 6/6:
            # control congruent
            left_position_variable =  - 0.03
            right_position_variable = 0.03
            position_manipulation = 0.03
            thisExp.addData("is_control", True)
            target_string = "I"
            correct_response = "left"
            thisExp.addData("is_congruent", True)
        else:
            print("unexpected random value -> " , random_value)

        # target
        target = visual.TextStim(win=win, name='target',
            text=target_string,
            font='Open Sans',
            pos=(0, 0), height=0.05, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

        target.setAutoDraw(True)

        # for the left flankers
        for flanker in range(number_of_flankers):
            flankers = visual.TextStim(win=win, name='flankers',
            text='I',
            font='Open Sans',
            pos=(left_position_variable, 0), height=0.05, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-1.0);
            left_flankers.append(flankers)
            left_position_variable = left_position_variable - position_manipulation

        # for the right flankers
        for flanker in range(number_of_flankers):
            flankers = visual.TextStim(win=win, name='flankers',
            text='I',
            font='Open Sans',
            pos=(right_position_variable, 0), height=0.05, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-1.0);
            right_flankers.append(flankers)
            right_position_variable = right_position_variable + position_manipulation

        for flankers in left_flankers:
            flankers.setAutoDraw(True)

        for flankers in right_flankers:
            flankers.setAutoDraw(True)


        # code written by Pushkar Singh (https://github.com/pushkarsingh019)
      End Routine:
        target.setAutoDraw(False)

        for flankers in left_flankers:
            flankers.setAutoDraw(False)

        for flankers in right_flankers:
            flankers.setAutoDraw(False)
    KeyboardComponent response
      allowedKeys = 'left','right'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine fixation
    PolygonComponent fix
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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  Routine instructions
    TextComponent text_instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Hello, the target appears in the centre. when it is 'I', press the 'left' key, when it is 'L' press the 'right' key.
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Flow
  Routine instructions
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 96
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    Routine trial
  LoopTerminator trials
